<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenHfVisualDataSchema;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionPath" />
        <Property Name="RigPath" />
        <Property Name="TaskPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\Experiment.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\UclOpenHfVisualRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="TaskPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\UclOpenHfVisualTaskLogic.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Experiment" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenHfVisualRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenHfVisualTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:SerialDevice.bonsai">
        <PortName>COM10</PortName>
        <BaudRate>1000000</BaudRate>
        <Encoding xsi:nil="true" />
        <NewLine>\n</NewLine>
        <Parity>None</Parity>
        <ParityReplace>63</ParityReplace>
        <DataBits>8</DataBits>
        <StopBits>One</StopBits>
        <Handshake>None</Handshake>
        <DiscardNull>false</DiscardNull>
        <DtrEnable>false</DtrEnable>
        <RtsEnable>false</RtsEnable>
        <ReadBufferSize>4096</ReadBufferSize>
        <WriteBufferSize>2048</WriteBufferSize>
        <ReceivedBytesThreshold>1</ReceivedBytesThreshold>
        <Name>Arduino</Name>
        <Pattern>%f</Pattern>
        <Separator>,</Separator>
        <SerialMessageSubjectName>SerialMessages</SerialMessageSubjectName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Screen</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DisplayDevice" Selector="DisplayIndex" />
          <Property Name="TargetUpdateFrequency" Selector="TargetUpdateFrequency" />
          <Property Name="TargetRenderFrequency" Selector="TargetRenderFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Screen.TextureAssetsDirectory</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>TODO</Name>
        <Text><![CDATA[Should be part of package]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadTextureBank</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
              <Property Name="SearchPattern" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFiles">
                <io:Path>../textures</io:Path>
                <io:SearchPattern>*.png</io:SearchPattern>
                <io:SearchOption>TopDirectoryOnly</io:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoadTexture</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TexturePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TexturePath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:GetFileNameWithoutExtension" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TexturePath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>../textures\txtr2.png</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="TextureBank" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TextureBank</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
        <TextureName />
        <ExtentX>2</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ShiftX>0</ShiftX>
        <ShiftY>0</ShiftY>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLogicParameters</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AvailableTextures</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:SelectPermutation" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>PresentationSequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureBank</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>txtr2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>Image</gl:ShaderName>
                <gl:TextureName />
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PresentationTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureBank</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InterPresentationTexture</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>grey</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>Image</gl:ShaderName>
                <gl:TextureName />
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InterPresentationTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT0.5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="25" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>